PsychoPy2experiment version="2024.2.3"
Settings
  Audio lib = ptb
  Enable Escape = False
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Show mouse = True
  Units = norm
  Window size (pixels) = [1536, 960]
  color = white
  expName = explorer
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
  rush = True
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Routines
  Routine definition
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    CodeComponent global_code
      Code Type = Py
      Before Experiment:
        import re
        import cv2
        import threading, time
        from psychopy.visual.movies import MovieFrame
        from psychopy import logging
        logging.console.setLevel(logging.CRITICAL)


        from faker import Faker

        fake = Faker(["en_US"], use_weighting=True)

        personalized_settings = {
            "typing_speed": 3.13, # characters per seconds
        }

        import serial

        class SerialConnector:
            CALIB_BEGIN = 1
            CALIB_END = 2

            EXP_BEGIN = 3
            EXP_END = 4

            WINDOW_CLOSE_BEGIN = 5
            WINDOW_CLOSE_END = 6

            # Mail related events
            MAIL_HOMESCREEN_BEGIN = 7
            MAIL_HOMESCREEN_END = 8
            MAIL_NOTIFICATION_BEGIN = 9
            MAIL_NOTIFICATION_END = 10
            MAIL_CONTENT_BEGIN = 11
            MAIL_CONTENT_END = 12

            # File manager (dragging and opening)
            FILE_MANAGER_HOMESCREEN_BEGIN = 13
            FILE_MANAGER_HOMESCREEN_END = 14
            FILE_MANAGER_DRAGGING_BEGIN = 15
            FILE_MANAGER_DRAGGING_END = 16
            FILE_MANAGER_OPENING_BEGIN = 17
            FILE_MANAGER_OPENING_END = 18

            # Trash bin
            TRASH_BIN_HOMESCREEN_BEGIN = 19
            TRASH_BIN_HOMESCREEN_END = 20
            TRASH_BIN_SELECT_BEGIN = 21
            TRASH_BIN_SELECT_END = 22
            TRASH_BIN_CONFIRM_BEGIN = 23
            TRASH_BIN_CONFIRM_END = 24

            # Notes
            NOTES_HOMESCREEN_BEGIN = 25
            NOTES_HOMESCREEN_END = 26
            NOTES_REPEAT_BEGIN = 27
            NOTES_REPEAT_END = 28

            # Browser
            BROWSER_HOMESCREEN_BEGIN = 29
            BROWSER_HOMESCREEN_END = 30
            BROWSER_NAVIGATION_BEGIN = 31
            BROWSER_NAVIGATION_END = 32
            BROWSER_CONTENT_BEGIN = 33
            BROWSER_CONTENT_END = 34

            # Questions
            QUESTION_BASE = 100
            QUESTION_LEAP = 10
            ## Answered questions will be encoded as
            ## QUESTION_BASE + QUESTION_LEAP * QUESTION_INDEX + QUESTION_RATING

            EEG_STOP_RECORDING = 255
            EEG_START_RECORDING = 254

            def __init__(self, com: str, bit_rate: int):
                try:
                    self.port = serial.Serial(com, bit_rate, write_timeout=0.1, timeout=0.1)
                except Exception as e:
                    self.port = None
                    logging.critical("EEG recording is not enabled!")
                    logging.critical(e)

            def write(self, number):
                if self.port is not None:
                    try:
                        self.port.write(int(number).to_bytes(1, 'big'))
                    except Exception as e:
                        logging.critical(f"Failed to send EEG signal {number}!")
                        logging.critical(e)
                else:
                    logging.critical(f"Virtually sending signal {number} to EEG")

            def open(self):
                if self.port is not None:
                    try:
                        self.port.open()
                    except Exception as e:
                        logging.critical(f"Failed to open EEG port!")
                        logging.critical(e)

            def close(self):
                if self.port is not None:
                    try:
                        self.port.close()
                    except Exception as e:
                        logging.critical(f"Failed to close EEG port!")
                        logging.critical(e)
        serial_connector = SerialConnector('COM3', 115200)
        serial_connector.open()
      Begin Experiment:
        FONT_SIZE = 0.1

        class StoppableThread(threading.Thread):
            def __init__(self, *args, **kwargs):
                super().__init__(*args, **kwargs)
                self._should_stop = threading.Event()
                self._is_finished = False  # Flag to track if the thread's main loop has finished

            def stop(self):
                self._should_stop.set()

            @property
            def running(self):
                # Return 0 if the thread is still running, 1 if it has finished
                return 1 if self._is_finished else 0


        class VideoRecorder:
            def __init__(self, camera_index=0):
                self.camera_index = camera_index
                self.cap = None
                self.out = None
                self.thread = None
                self.latest_frame = None
                self.frame_size = (1280, 720)
                self.frame_rate = 50
                self.camRecFolder = thisExp.dataFileName + '_cam_recorded'
                if not os.path.isdir(self.camRecFolder):
                    os.mkdir(self.camRecFolder)

            def open(self):
                self.cap = cv2.VideoCapture(self.camera_index)
                if not self.cap.isOpened():
                    raise Exception("Could not open camera")
                self.cap.set(cv2.CAP_PROP_FRAME_WIDTH, self.frame_size[0])
                self.cap.set(cv2.CAP_PROP_FRAME_HEIGHT, self.frame_size[1])
                self.cap.set(cv2.CAP_PROP_FPS, self.frame_rate)

            def record(self):
                if self.cap is None:
                    raise Exception("Camera is not opened")

                if self.thread and not self.thread._should_stop.is_set():
                    raise Exception("Already recording")

                # Save cam recording
                camFilename = os.path.join(
                    self.camRecFolder,
                    'recording_cam_%s.mp4' % data.utils.getDateStr()
                )
                thisExp.addData('camera.filename', camFilename)
                self.thread = StoppableThread(target=self._record_loop, args=(camFilename,), daemon=True)
                self.thread.start()

            def _record_loop(self, filename):
                fourcc = cv2.VideoWriter_fourcc(*'mp4v')
                self.out = cv2.VideoWriter(filename, fourcc, self.frame_rate, self.frame_size)

                while not self.thread._should_stop.is_set() and self.cap.isOpened():
                    ret, frame = self.cap.read()
                    if not ret:
                        time.sleep(1 / self.frame_rate * 0.1)
                        continue
                    self.out.write(frame)
                    # Update the latest frame
                    videoFrameArray = np.ascontiguousarray(
                        cv2.cvtColor(frame, cv2.COLOR_BGR2RGB).flatten(), dtype=np.uint8)
                    self.latest_frame = MovieFrame(
                        frameIndex=0,
                        absTime=0.0,
                        size=self.frame_size,
                        colorFormat='rgb24',
                        colorData=videoFrameArray,
                        audioChannels=0,
                        audioSamples=None,
                        metadata=None,
                        movieLib="opencv",
                        userData=None)
                    time.sleep(1 / self.frame_rate * 0.5)

                self.out.release()
                self.thread._is_finished = True  # Mark the thread as finished

            def getVideoFrame(self):
                return self.latest_frame

            @property
            def frameSize(self):
                return self.frame_size

            def save(self):
                if not self.thread._should_stop.is_set():
                    self.thread.stop()
                if self.thread.running == 0:
                    self.thread.join()

                if self.out:
                    self.out.release()

            def list(self):
                index = 0
                available_cameras = []
                while True:
                    cap = cv2.VideoCapture(index)
                    if not cap.read()[0]:
                        break
                    available_cameras.append(index)
                    cap.release()
                    index += 1
                return available_cameras

            def close(self):
                if not self.thread._should_stop.is_set():
                    self.thread.stop()
                if self.thread.running == 0:
                    self.thread.join()
                if self.cap:
                    self.cap.release()
                cv2.destroyAllWindows()

        camera_connector = VideoRecorder()
        camera_connector.open()


        class Stylizer:
            STYLES = ["windows", "mac"]
            predefined_style = None
            current_style = None

            def __init__(self, style=None):
                self.predefined_style = style
                self.reset(style)

            def log(self):
                thisExp.addData("operating_system_style", self.current_style)

            def reset(self, style=None):
                if self.predefined_style is not None:
                    self.current_style = self.predefined_style
                elif style is None or style not in self.STYLES:
                    self.current_style = np.random.choice(self.STYLES)
                else:
                    self.current_style = style

        class Component:
            def __init__(self):
                self.COMPONENTS = []

            def hide(self):
                for component in self.COMPONENTS:
                    component.setAutoDraw(False)

            def show(self):
                for component in self.COMPONENTS:
                    component.setAutoDraw(True)
                    component.draw()

        class TaskBar(Component):
            ICON_SIZE = 0.1
            ICON_SIZE_PRESSED = 0.09
            ICON_GAP = 0.005
            BAR_SIZE = 0.1
            FONT_SIZE = 0.1
            ASPECT_RATIO = win.size[0] / win.size[1]
            ICONS = {
                "File Manager": "resources/{}/explorer.png",
                "Browser": "resources/{}/network.png",
                "Mail": "resources/{}/mail.png",
                "Document": "resources/{}/notes.png",
                "Trash": "resources/{}/trash_full.png",
            }
            HOME = 'resources/{}/homescreen.png'
            TASKBAR = 'resources/{}/taskbar.png'
            HIGHLIGHT = 'resources/{}/highlight.png'

            icon_objects = []
            highlight_object = None
            target_name = None
            mouse = event.Mouse(win=win)

            def __init__(self, style, target=None):
                super().__init__()
                self.style = style
                self.allocate_target(index=target)
                self.draw_interface()

            def update(self):
                self.updateHighlight()
                return self.updateStatus()

            def allocate_target(self, index=None):
                if index is None or index >= len(self.ICONS):
                    self.target_name = np.random.choice(list(self.ICONS.keys()))
                else:
                    self.target_name = list(self.ICONS.keys())[index]

            def get_taskbar_icon_at(self, i):
                relative_location = i - len(self.ICONS) / 2
                relative_sign = np.sign(relative_location)
                absolute_location = np.abs(relative_location)
                return ((self.ICON_GAP + self.ICON_SIZE / self.ASPECT_RATIO) * relative_location, -1.0 + self.BAR_SIZE / 2)

            def reset(self):
                style = self.style.current_style
                for component in self.COMPONENTS:
                    if isinstance(component, visual.ImageStim):
                        component.setImage(component.name.format(style))

            def set_trash_empty(self):
                for component in self.COMPONENTS:
                    if component.name == self.ICONS["Trash"]:
                        component.setImage(component.image.replace("full", "empty"))

            def draw_interface(self):
                style = self.style.current_style
                bg_image = visual.ImageStim(
                    win=win,
                    name=self.HOME,
                    units='norm',
                    image=self.HOME.format(style), anchor='center',
                    pos=(0, -1 / 2 * self.FONT_SIZE), size=(2.0, 2.0 - self.FONT_SIZE),
                    interpolate=True)
                bg_image.setAutoDraw(True)
                self.COMPONENTS.append(bg_image)
                task_bar = visual.ImageStim(
                    win=win,
                    name=self.TASKBAR,
                    units="norm",
                    image=self.TASKBAR.format(style),
                    opacity=1.0,
                    size=(2.0, self.BAR_SIZE + 0.005),
                    pos=(0, -1.0),
                    anchor="bottom-center"
                )
                task_bar.setAutoDraw(True)
                self.COMPONENTS.append(task_bar)
                self.highlight_object = visual.ImageStim(
                    win=win,
                    name=self.HIGHLIGHT,
                    units='norm',
                    image=self.HIGHLIGHT.format(style), anchor='center',
                    pos=(0, 2.0), size=(self.ICON_SIZE / self.ASPECT_RATIO, self.ICON_SIZE),
                    interpolate=True, opacity=0.1)
                self.highlight_object.setAutoDraw(True)
                self.COMPONENTS.append(self.highlight_object)
                for index, icon_resource in enumerate(self.ICONS.values()):
                    icon = visual.ImageStim(
                        win=win,
                        name=icon_resource,
                        units='norm',
                        image=icon_resource.format(style), anchor='center',
                        pos=self.get_taskbar_icon_at(index + 1), size=(self.ICON_SIZE / self.ASPECT_RATIO, self.ICON_SIZE),
                        interpolate=True)
                    self.icon_objects.append(icon)
                    icon.setAutoDraw(True)
                    self.COMPONENTS.append(icon)
                pass

            def updateHighlight(self):
                if self.highlight_object is None:
                    return
                for element in self.icon_objects:
                    if element.contains(self.mouse.getPos()):
                        self.highlight_object.setPos(element.pos)
                        return
                self.highlight_object.setPos((0, 1.0))
                return

            def updateStatus(self):
                for element, element_name in zip(self.icon_objects, self.ICONS.keys()):
                    if self.mouse.isPressedIn(element):
                        element.setSize((self.ICON_SIZE_PRESSED / self.ASPECT_RATIO, self.ICON_SIZE_PRESSED))
                        if element_name == self.target_name:
                            return False
                    else:
                        element.setSize((self.ICON_SIZE / self.ASPECT_RATIO, self.ICON_SIZE))
                return True

        class BaseWindow(Component):
            FONT_SIZE = 0.1
            BAR_SIZE = 0.1
            TOOLBAR_SIZE = 0.1
            ASPECT_RATIO = win.size[0] / win.size[1]
            NAME = "Window"
            TOOLS = {
                "windows": {
                    "Close": "resources/windows/close.png",
                    "Maximize": "resources/windows/max.png",
                    "Minimize": "resources/windows/min.png",
                },
                "mac": {
                    "Close": "resources/mac/close.png",
                    "Minimize": "resources/mac/min.png",
                    "Maximize": "resources/mac/max.png",
                }
            }
            TOOLS_HIGHLIGHT = {
                "windows": {
                    "Close": "resources/windows/close_highlight.png",
                    "Maximize": "resources/windows/max_highlight.png",
                    "Minimize": "resources/windows/min_highlight.png",
                },
                "mac": {
                    "Close": "resources/mac/close_highlight.png",
                    "Minimize": "resources/mac/min_highlight.png",
                    "Maximize": "resources/mac/max_highlight.png",
                }
            }

            mouse = event.Mouse(win=win)
            objects = {}

            def __init__(self, style):
                super().__init__()
                self.style = style
                self.allocate_target()
                self.draw_interface()

            def update(self):
                return self.updateHighlight()

            def log(self):
                thisExp.addData("window_close_target_name", self.target_name)

            def update_title(self, name):
                self.NAME = name
                self.title.text = name

            def allocate_target(self, index=None):
                if index is None or index >= len(self.TOOLS[self.style.current_style]):
                    self.target_name = np.random.choice(["Close", "Minimize"])
                else:
                    self.target_name = list(self.TOOLS[self.style.current_style].keys())[index]

            def reset(self):
                style = self.style.current_style
                self.title.alignment = self.calculate_title_layout(style)
                for element_name, element_tuple in self.objects.items():
                    for element, definition in zip(element_tuple, [self.TOOLS, self.TOOLS_HIGHLIGHT]):
                        element.setImage(definition[style][element_name])
                        index = list(definition[style].keys()).index(element_name)
                        param_dict = self.calculate_tool_layout(index, style)
                        for key, value in param_dict.items():
                            setattr(element, key, value)

            def draw_interface(self):
                style = self.style.current_style
                bg_window = visual.Rect(
                    win=win,
                    name="base_window",
                    units='norm',
                    fillColor=[0.8824, 0.8824, 0.8824], opacity=0.96, anchor='top-center',
                    pos=(0, 1.0 - self.FONT_SIZE - self.TOOLBAR_SIZE), size=(2.0, 2.0 - self.FONT_SIZE - self.TOOLBAR_SIZE - self.BAR_SIZE),
                    interpolate=True)
                bg_window.setAutoDraw(True)
                self.COMPONENTS.append(bg_window)
                bg_toolbar = visual.Rect(
                    win=win,
                    name="base_toolbar",
                    units='norm',
                    fillColor="lightgray", opacity=1.0, anchor='top-center',
                    pos=(0, 1.0 - self.FONT_SIZE), size=(2.0, self.TOOLBAR_SIZE),
                    interpolate=True)
                bg_toolbar.setAutoDraw(True)
                self.COMPONENTS.append(bg_toolbar)
                self.title = visual.TextBox2(
                     win, text=self.NAME, font='Open Sans',
                     pos=(-1.0 + self.FONT_SIZE / 4, 1.0 - self.FONT_SIZE), units='norm', letterHeight=self.FONT_SIZE / 2,
                     size=(2.0 - self.FONT_SIZE / 2, self.TOOLBAR_SIZE), borderWidth=2.0,
                     color='black', colorSpace='rgb',
                     opacity=None, bold=False, italic=False,
                     lineSpacing=1.0, speechPoint=None,
                     padding=0.0, alignment=self.calculate_title_layout(style),
                     anchor='top-left', overflow='visible',
                     fillColor=None, borderColor=None,
                     flipHoriz=False, flipVert=False, languageStyle='LTR',
                     editable=False,
                     name='base_window_title',
                     autoLog=False
                )
                self.title.setAutoDraw(True)
                self.COMPONENTS.append(self.title)
                for index, (tool_name, tool_resource, tool_highlight_resource) in enumerate(zip(self.TOOLS[style].keys(), self.TOOLS[style].values(), self.TOOLS_HIGHLIGHT[style].values())):
                    icon = visual.ImageStim(
                        win=win,
                        name=tool_name,
                        units='norm',
                        image=tool_resource, size=(self.BAR_SIZE / self.ASPECT_RATIO, self.BAR_SIZE),
                        interpolate=True,
                        **self.calculate_tool_layout(index, style))
                    icon.setAutoDraw(True)
                    icon_highlight = visual.ImageStim(
                        win=win,
                        name=f"{tool_name}_highlight",
                        units='norm',
                        image=tool_highlight_resource, size=(self.BAR_SIZE / self.ASPECT_RATIO, self.BAR_SIZE),
                        interpolate=True, opacity=0.0,
                        **self.calculate_tool_layout(index, style))
                    icon_highlight.setAutoDraw(True)
                    self.objects[tool_name] = (icon, icon_highlight)
                    self.COMPONENTS.append(icon)
                    self.COMPONENTS.append(icon_highlight)
            pass

            def calculate_tool_layout(self, index, style):
                params = {}
                if style == "windows":
                    params["anchor"] = 'top-right'
                    params["pos"] = (1.0 - index * self.BAR_SIZE / self.ASPECT_RATIO, 1.0 - self.FONT_SIZE)
                else:
                    params["anchor"] = 'top-left'
                    params["pos"] = (-1.0 + index * self.BAR_SIZE / self.ASPECT_RATIO, 1.0 - self.FONT_SIZE)
                return params

            def calculate_title_layout(self, style):
                if style == "windows":
                    return 'center-left'
                return 'center'

            def updateHighlight(self):
                for element_name, element_tuple in self.objects.items():
                    element = element_tuple[1]
                    if element.contains(self.mouse.getPos()):
                        element.opacity = 1.0
                    else:
                        element.opacity = 0.0
                    if self.mouse.isPressedIn(element) and element_name == self.target_name:
                        return False
                return True


        class FormOverlay(Component):
            FONT_SIZE = 0.1
            BAR_SIZE = 0.1
            TOOLBAR_SIZE = 0.1
            SEARCHBAR_SIZE = 0.1
            SLIDER_SIZE = 0.1
            SLIDER_WIDTH = 1.4
            LABEL_WIDTH = 2.0
            BUTTON_WIDTH = 0.2
            ASPECT_RATIO = win.size[0] / win.size[1]
            SLIDERS = []
            HINTS = []

            current_index = 0
            order = []
            mouse = event.Mouse(win=win)

            def __init__(self, random=False):
                super().__init__()
                self.random = random
                self.draw_interface()
                self.randomize_order()

            def randomize_order(self):
                self.order = list(range(len(self.SLIDERS)))
                if self.random:
                    np.random.shuffle(self.order)

            def update(self):
                display_index = self.order[self.current_index]
                if self.mouse.isPressedIn(self.next_button) and self.SLIDERS[display_index].getRating() is not None:
                    serial_connector.write(SerialConnector.QUESTION_BASE + SerialConnector.QUESTION_LEAP * display_index + self.SLIDERS[display_index].getRating())
                    self.current_index += 1
                    if self.current_index >= len(self.SLIDERS):
                        self.current_index = 0
                        return False  # End of the form
                self.update_interface()  # Show next hint/slider
                return True

            def log(self):
                for slider_component in self.SLIDERS:
                    thisExp.addData(f"{slider_component.name}.rating", slider_component.getRating())
                    thisExp.addData(f"{slider_component.name}.rt", slider_component.getRT())

            def reset(self):
                self.current_index = 0
                for slider_component in self.SLIDERS:
                    slider_component.reset()
                self.randomize_order()
                self.update_interface()

            def update_interface(self):
                display_index = self.order[self.current_index]
                for index, (hint, slider) in enumerate(zip(self.HINTS, self.SLIDERS)):
                    if index == display_index:
                        hint.setAutoDraw(True)
                        hint.draw()
                        slider.setAutoDraw(True)
                        slider.draw()
                    else:
                        hint.setAutoDraw(False)
                        slider.setAutoDraw(False)
                if self.current_index == len(self.SLIDERS) - 1:
                    self.next_button.text = "Finish"
                else:
                    self.next_button.text = "Next"

            def draw_interface(self):
                self.next_button = visual.TextBox2(win, text='Next', pos=(0, -0.3), font='Open Sans',
                         units='norm', color='black', letterHeight=self.FONT_SIZE / 2,
                         size=(self.BUTTON_WIDTH, self.SLIDER_SIZE), alignment='center',
                         anchor='top-center', borderWidth=1.0, borderColor="black")
                self.next_button.setAutoDraw(True)
                self.COMPONENTS.append(self.next_button)
                texts = [
                    "Sleepiness: How sleepy are you?",
                    "Mental Demand: How mentally demanding was the task?",
                    #"Physical Demand: How physically demanding was the task?",
                    "Temporal Demand: How hurried or rushed was the pace of the task?",
                    "Performance: How successful were you in accomplishing what you were asked to do?",
                    "Effort: How hard did you have to work to accomplish your level of performance?",
                    "Frustration: How insecure, discouraged, irritated, stressed, and annoyed were you?",
                    "Attentiveness: How focused were you on performing the task?"
                ]
                labels = [
                    ["extremely alert", "", "alert", "", "neither alert nor sleepy", "", "sleepy", "", "very sleepy"],
                    ["very low", "", "", "medium", "", "", "very high"],
                    #["very low", "", "", "medium", "", "", "very high"],
                    ["very slow", "", "", "medium", "", "", "very fast"],
                    ["failure", "", "", "okay", "", "", "perfect"],
                    ["very low", "", "", "medium", "", "", "very high"],
                    ["very low", "", "", "medium", "", "", "very high"],
                    ["not at all", "", "", "", "", "", "", "completely"],
                ]
                ticks = [
                    (1, 2, 3, 4, 5, 6, 7, 8, 9),
                    (1, 2, 3, 4, 5, 6, 7),
                    #(1, 2, 3, 4, 5, 6, 7),
                    (1, 2, 3, 4, 5, 6, 7),
                    (1, 2, 3, 4, 5, 6, 7),
                    (1, 2, 3, 4, 5, 6, 7),
                    (1, 2, 3, 4, 5, 6, 7),
                    (1, 2, 3, 4, 5, 6, 7)
                ]
                for hint, label, tick in zip(
                    texts, labels, ticks
                ):
                    hint_text = visual.TextBox2(
                         win, text=hint, font='Open Sans',
                         pos=(0, 0.2), units='norm', letterHeight=self.FONT_SIZE / 1.5,
                         size=(self.LABEL_WIDTH, self.SLIDER_SIZE), borderWidth=0.0,
                         color='black', colorSpace='rgb',
                         opacity=None, bold=False, italic=False,
                         lineSpacing=1.0, speechPoint=None,
                         padding=0.0, alignment='center',
                         anchor='top-center', overflow='visible',
                         fillColor=None, borderColor=None,
                         flipHoriz=False, flipVert=False, languageStyle='LTR',
                         editable=False,
                         name=hint.lower().replace(" ", "_").replace(",", "_").replace("?", ""),
                         autoLog=False
                    )
                    hint_text.setAutoDraw(True)
                    self.COMPONENTS.append(hint_text)
                    self.HINTS.append(hint_text)
                    slider = visual.Slider(win=win, name=hint.lower().replace(" ", "_").replace(",", "_").replace("?", "_slider"),
                        startValue=None, size=(self.SLIDER_WIDTH, self.SLIDER_SIZE), pos=(0, 0.2 - self.SLIDER_SIZE * 2), units='norm',
                        labels=label,
                        ticks=tick,
                        granularity=1,
                        style='rating', styleTweaks=('triangleMarker',), opacity=None,
                        labelColor='black', markerColor='Red', lineColor='darkgrey', colorSpace='rgb',
                        font='Open Sans', labelHeight=self.FONT_SIZE / 3,
                        flip=False, ori=0.0, readOnly=False)
                    slider.setAutoDraw(True)
                    self.COMPONENTS.append(slider)
                    self.SLIDERS.append(slider)


        class FormOverlayDeprecated(Component):
            FONT_SIZE = 0.1
            BAR_SIZE = 0.1
            TOOLBAR_SIZE = 0.1
            SEARCHBAR_SIZE = 0.1
            SLIDER_SIZE = 0.06
            SLIDER_WIDTH = 1.6
            LABEL_WIDTH = 2.0
            ASPECT_RATIO = win.size[0] / win.size[1]
            SLIDERS = []
            HINTS = []


            def __init__(self, random=False):
                super().__init__()
                self.random = random
                self.draw_interface()

            def update(self):
                for slider_component in self.SLIDERS:
                    if slider_component.getRating() is None:
                        return True
                return False

            def log(self):
                for slider_component in self.SLIDERS:
                    thisExp.addData(f"{slider_component.name}.rating", slider_component.getRating())
                    thisExp.addData(f"{slider_component.name}.rt", slider_component.getRT())

            def reset(self):
                for slider_component in self.SLIDERS:
                    slider_component.reset()
                if self.random:
                    upper_bound = 1.0 - self.FONT_SIZE - self.TOOLBAR_SIZE - self.SEARCHBAR_SIZE * 2
                    lower_bound = -1.0 + self.BAR_SIZE
                    locations = np.linspace(upper_bound, lower_bound, len(self.SLIDERS) + 1)[:len(self.SLIDERS)]
                    if self.random:
                        locations = np.random.permutation(locations)
                    for hint, slider, location in zip(self.HINTS, self.SLIDERS, locations):
                        hint.pos = (0, location)
                        slider.pos = (0, location - self.SLIDER_SIZE * 2)

            def draw_interface(self):
                upper_bound = 1.0 - self.FONT_SIZE - self.TOOLBAR_SIZE - self.SEARCHBAR_SIZE * 2
                lower_bound = -1.0 + self.BAR_SIZE
                texts = [
                    "Sleepiness: How sleepy are you?",
                    "Mental Demand: How mentally demanding was the task?",
                    "Physical Demand: How physically demanding was the task?",
                    "Temporal Demand: How hurried or rushed was the pace of the task?",
                    "Performance: How successful were you in accomplishing what you were asked to do?",
                    "Effort: How hard did you have to work to accomplish your level of performance?",
                    "Frustration: How insecure, discouraged, irritated, stressed, and annoyed were you?"
                ]
                labels = [
                    ["extremely alert", "", "alert", "", "neither alert nor sleepy", "", "sleepy", "", "very sleepy"],
                    ["very low", "", "", "medium", "", "", "very high"],
                    ["very low", "", "", "medium", "", "", "very high"],
                    ["very slow", "", "", "medium", "", "", "very fast"],
                    ["failure", "", "", "okay", "", "", "perfect"],
                    ["very low", "", "", "medium", "", "", "very high"],
                    ["very low", "", "", "medium", "", "", "very high"],
                ]
                ticks = [
                    (1, 2, 3, 4, 5, 6, 7, 8, 9),
                    (1, 2, 3, 4, 5, 6, 7),
                    (1, 2, 3, 4, 5, 6, 7),
                    (1, 2, 3, 4, 5, 6, 7),
                    (1, 2, 3, 4, 5, 6, 7),
                    (1, 2, 3, 4, 5, 6, 7),
                    (1, 2, 3, 4, 5, 6, 7)
                ]
                locations = np.linspace(upper_bound, lower_bound, len(texts) + 1)[:len(texts)]
                if self.random:
                    locations = np.random.permutation(locations)
                for hint, label, tick, location in zip(
                    texts, labels, ticks, locations

                ):
                    hint_text = visual.TextBox2(
                         win, text=hint, font='Open Sans',
                         pos=(0, location), units='norm', letterHeight=self.FONT_SIZE / 2,
                         size=(self.LABEL_WIDTH, self.SLIDER_SIZE), borderWidth=0.0,
                         color='black', colorSpace='rgb',
                         opacity=None, bold=False, italic=False,
                         lineSpacing=1.0, speechPoint=None,
                         padding=0.0, alignment='center',
                         anchor='top-center', overflow='visible',
                         fillColor=None, borderColor=None,
                         flipHoriz=False, flipVert=False, languageStyle='LTR',
                         editable=False,
                         name=hint.lower().replace(" ", "_").replace("?", ""),
                         autoLog=False
                    )
                    hint_text.setAutoDraw(True)
                    self.COMPONENTS.append(hint_text)
                    self.HINTS.append(hint_text)
                    slider = visual.Slider(win=win, name=hint.lower().replace(" ", "_").replace("?", "_slider"),
                        startValue=None, size=(self.SLIDER_WIDTH, self.SLIDER_SIZE), pos=(0, location - self.SLIDER_SIZE * 2), units='norm',
                        labels=label,
                        ticks=tick,
                        granularity=1,
                        style='rating', styleTweaks=('triangleMarker',), opacity=None,
                        labelColor='black', markerColor='Red', lineColor='darkgrey', colorSpace='rgb',
                        font='Open Sans', labelHeight=self.FONT_SIZE / 4,
                        flip=False, ori=0.0, readOnly=False)
                    slider.setAutoDraw(True)
                    self.COMPONENTS.append(slider)
                    self.SLIDERS.append(slider)


        class BrowserSearchbar(Component):
            FONT_SIZE = 0.1
            BAR_SIZE = 0.1
            TOOLBAR_SIZE = 0.1
            SEARCHBAR_SIZE = 0.1
            ASPECT_RATIO = win.size[0] / win.size[1]
            WORD_LIST = ['backspace', 'comma', 'period', 'underscore', 'minus', 'a', 'b', 'c', 'd', 'e', 'f', 'g', 'h', 'i', 'j', 'k', 'l', 'm', 'n', 'o', 'p', 'q', 'r', 's', 't', 'u', 'v', 'w', 'x', 'y', 'z']
            CHAR_LIST = [',', '.', '_', '-', 'a', 'b', 'c', 'd', 'e', 'f', 'g', 'h', 'i', 'j', 'k', 'l', 'm', 'n', 'o', 'p', 'q', 'r', 's', 't', 'u', 'v', 'w', 'x', 'y', 'z']


            def __init__(self):
                super().__init__()
                self.draw_interface()
                self.allocate_target()

            def log(self):
                thisExp.addData('browser_navigation_template', self.target_name)
                thisExp.addData('browser_navigation_user_input', self.get_text())

            def update(self):
                self.search_bar.text = "".join([c for c in self.search_bar.text if c in self.CHAR_LIST])
                if self.search_bar.text.replace(" ", "").lower() == self.target_name.lower():
                    self.search_bar.editable = False
                    self.search_bar.hasFocus = False
                    return False
                self.search_bar.editable = True
                self.search_bar.hasFocus = True
                return True

            def get_text(self):
                return self.search_bar.text

            def allocate_target(self, url=None):
                if url is None:
                    self.target_name = fake.url().replace("http://", "").replace("https://", "").strip("/") # np.random.choice(["www.google.com", "www.bing.com"])
                else:
                    self.target_name = url
                self.search_bar.reset()

            def draw_interface(self):
                left_circle = visual.ShapeStim(
                    win=win, name='base_searchbar_left_circle',units='norm',
                    size=(self.SEARCHBAR_SIZE / self.ASPECT_RATIO, self.SEARCHBAR_SIZE),
                    vertices='circle',
                    ori=0.0,
                    pos=(-1.0 + self.SEARCHBAR_SIZE / self.ASPECT_RATIO, 1.0 - self.FONT_SIZE - self.TOOLBAR_SIZE - self.SEARCHBAR_SIZE / 2),
                    anchor='top-left',
                    lineWidth=1.0,
                    colorSpace='rgb', lineColor=None, fillColor='lightgray',
                    opacity=1.0, interpolate=True)
                left_circle.setAutoDraw(True)
                self.COMPONENTS.append(left_circle)
                right_circle = visual.ShapeStim(
                    win=win, name='base_searchbar_right_circle',units='norm',
                    size=(self.SEARCHBAR_SIZE / self.ASPECT_RATIO, self.SEARCHBAR_SIZE),
                    vertices='circle',
                    ori=0.0,
                    pos=(1.0 - self.SEARCHBAR_SIZE / self.ASPECT_RATIO, 1.0 - self.FONT_SIZE - self.TOOLBAR_SIZE - self.SEARCHBAR_SIZE / 2),
                    anchor='top-right',
                    lineWidth=1.0,
                    colorSpace='rgb', lineColor=None, fillColor='lightgray',
                    opacity=1.0, interpolate=True)
                right_circle.setAutoDraw(True)
                self.COMPONENTS.append(right_circle)
                bar = visual.Rect(
                    win=win, name='base_searchbar_bar',units='norm',
                    size=(2.0 - 3 * self.SEARCHBAR_SIZE / self.ASPECT_RATIO, self.SEARCHBAR_SIZE),
                    ori=0.0,
                    pos=(0.0, 1.0 - self.FONT_SIZE - self.TOOLBAR_SIZE - self.SEARCHBAR_SIZE / 2),
                    anchor='top-center',
                    lineWidth=1.0,
                    colorSpace='rgb', lineColor=None, fillColor='lightgray',
                    opacity=1.0, interpolate=True)
                bar.setAutoDraw(True)
                self.COMPONENTS.append(bar)
                self.search_bar = visual.TextBox2(
                    win=win,
                    name="base_searchbar_input",
                    placeholder="",
                    text="",
                    font="Open Sans",
                    letterHeight=self.FONT_SIZE / 2,
                    alignment="center-left",
                    units='norm',
                    anchor='top-center',
                    padding=0.01,
                    lineSpacing=1.0,
                    bold=False,
                    italic=False,
                    color="black",
                    borderWidth=0.0,
                    fillColor=None,
                    borderColor=None,
                    overflow="visible",
                    editable=False,
                    pos=(0, 1.0 - self.FONT_SIZE - self.TOOLBAR_SIZE - self.SEARCHBAR_SIZE / 2),
                    size=(2.0 - 3 * self.SEARCHBAR_SIZE / self.ASPECT_RATIO, self.SEARCHBAR_SIZE))
                self.search_bar.setAutoDraw(True)
                self.COMPONENTS.append(self.search_bar)


        class TrashItemsOverlay(Component):
            FONT_SIZE = 0.1
            BAR_SIZE = 0.1
            TOOLBAR_SIZE = 0.1
            FOLDER_SIZE = 0.1
            ASPECT_RATIO = win.size[0] / win.size[1]
            FOLDERS = []
            FOLDER_HIGHLIGHTS = []

            TARGET = 'resources/trash_stimuli.png'
            TARGET_HIGHLIGHT = 'resources/trash_stimuli_highlight.png'

            mouse = event.Mouse(win=win)
            last_mouse_pressed = False
            last_mouse_location = (0.0, 0.0)

            def __init__(self, N=6):
                super().__init__()
                self.N = N
                self.draw_interface()

            def highlight_folders(self, pos):
                count = 0
                for folder_highlight in self.FOLDER_HIGHLIGHTS:
                    corners = [
                        (folder_highlight.pos[0] + x, folder_highlight.pos[1] + y)
                        for x in [folder_highlight.size[0] / -2, folder_highlight.size[0] / 2] for y in [folder_highlight.size[1] / -2, folder_highlight.size[1] / 2]
                    ]
                    found = False
                    for corner in corners:
                        if min(self.last_mouse_location[0], pos[0]) <= corner[0] <= max(self.last_mouse_location[0], pos[0]) and \
                            min(self.last_mouse_location[1], pos[1]) <= corner[1] <= max(self.last_mouse_location[1], pos[1]):
                                count += 1
                                found = True
                                folder_highlight.opacity = 1.0
                                break
                    if not found:
                        folder_highlight.opacity = 0.0
                return not count == len(self.FOLDER_HIGHLIGHTS)

            def highlight_area(self, pos, show=False):
                if show:
                    self.area.opacity = 0.8
                    self.area.pos = (min(pos[0], self.last_mouse_location[0]) + abs(pos[0] - self.last_mouse_location[0]) / 2,
                                        min(pos[1], self.last_mouse_location[1]) + abs(pos[1] - self.last_mouse_location[1]) / 2)
                    self.area.size = (abs(pos[0] - self.last_mouse_location[0]), abs(pos[1] - self.last_mouse_location[1]))
                else:
                    self.area.opacity = 0.0

            def update(self):
                buttons = self.mouse.getPressed()
                if not self.last_mouse_pressed and np.sum(buttons) > 0:
                    self.last_mouse_pressed = True
                    self.last_mouse_location = self.mouse.getPos()
                    self.highlight_area(self.mouse.getPos(), show=True)
                    # Highlight all selected folders
                    self.highlight_folders(self.mouse.getPos())
                    return True
                elif self.last_mouse_pressed and np.sum(buttons) > 0:
                    self.highlight_area(self.mouse.getPos(), show=True)
                    # Highlight all selected folders
                    self.highlight_folders(self.mouse.getPos())
                    return True
                elif self.last_mouse_pressed and np.sum(buttons) == 0:
                    self.highlight_area(self.mouse.getPos(), show=False)
                    # Highlight all selected folders
                    self.last_mouse_pressed = False
                    return self.highlight_folders(self.mouse.getPos())
                self.highlight_area(self.mouse.getPos(), show=False)
                # None selected
                return True

            def log(self):
                for folder in self.FOLDERS:
                    thisExp.addData(folder.name, folder.pos)
                thisExp.addData("selection_start", self.last_mouse_location)
                thisExp.addData("selection_end", self.mouse.getPos())

            def reset(self):
                self.last_mouse_pressed = False
                upper_bound = 1.0 - self.FONT_SIZE - self.TOOLBAR_SIZE * 2
                lower_bound = -1.0 + self.BAR_SIZE + self.TOOLBAR_SIZE
                left_bound = -1.0 + self.TOOLBAR_SIZE / self.ASPECT_RATIO + self.FOLDER_SIZE / 2 / self.ASPECT_RATIO
                right_bound = 1.0 - self.TOOLBAR_SIZE / self.ASPECT_RATIO - self.FOLDER_SIZE / 2 / self.ASPECT_RATIO
                locs_x = np.random.uniform(low=left_bound, high=right_bound, size=self.N)
                locs_y = np.random.uniform(low=lower_bound, high=upper_bound, size=self.N)
                self.area.opacity = 0.0
                self.area.size = (0.0, 0.0)
                self.area.pos = (0.0, 0.0)
                for folder, folder_highlight, loc_x, loc_y in zip(self.FOLDERS, self.FOLDER_HIGHLIGHTS, locs_x, locs_y):
                    folder.pos = (loc_x, loc_y)
                    folder_highlight.pos = (loc_x, loc_y)
                    folder_highlight.opacity = 0.0

            def draw_interface(self):
                self.area = visual.Rect(
                    win=win, name='selection_area',units='norm',
                    size=(0.0, 0.0),
                    ori=0.0,
                    pos=(0.0, 0.0),
                    anchor='center',
                    lineWidth=2.0,
                    colorSpace='rgb',
                    lineColor=[-1.0000, -0.0588, 0.6863],
                    fillColor=[0.3961, 0.6314, 1.0000],
                    opacity=0.0, interpolate=True)
                self.area.setAutoDraw(True)
                self.COMPONENTS.append(self.area)
                upper_bound = 1.0 - self.FONT_SIZE - self.TOOLBAR_SIZE * 2
                lower_bound = -1.0 + self.BAR_SIZE + self.TOOLBAR_SIZE
                left_bound = -1.0 + self.TOOLBAR_SIZE / self.ASPECT_RATIO + self.FOLDER_SIZE / 2 / self.ASPECT_RATIO
                right_bound = 1.0 - self.TOOLBAR_SIZE / self.ASPECT_RATIO - self.FOLDER_SIZE / 2 / self.ASPECT_RATIO
                locs_x = np.random.uniform(low=left_bound, high=right_bound, size=self.N)
                locs_y = np.random.uniform(low=lower_bound, high=upper_bound, size=self.N)
                for index, (loc_x, loc_y) in enumerate(zip(
                    locs_x, locs_y
                )):
                    folder_highlight = visual.ImageStim(
                        win=win,
                        name=f"trash_folder_highlight_{index}",
                        units='norm',
                        opacity=0.0,
                        image=self.TARGET_HIGHLIGHT, anchor='center',
                        pos=(loc_x, loc_y), size=(self.FOLDER_SIZE / self.ASPECT_RATIO, self.FOLDER_SIZE),
                        interpolate=True)
                    folder_highlight.setAutoDraw(True)
                    self.COMPONENTS.append(folder_highlight)
                    self.FOLDER_HIGHLIGHTS.append(folder_highlight)
                    folder = visual.ImageStim(
                        win=win,
                        name=f"trash_folder_{index}",
                        units='norm',
                        image=self.TARGET, anchor='center',
                        pos=(loc_x, loc_y), size=(self.FOLDER_SIZE / self.ASPECT_RATIO, self.FOLDER_SIZE),
                        interpolate=True)
                    folder.setAutoDraw(True)
                    self.COMPONENTS.append(folder)
                    self.FOLDERS.append(folder)

        class PopupWindow(Component):
            ICON = 'resources/warning.png'
            WINDOW_SIZE = 0.5
            TOOLBAR_SIZE = 0.1
            FONT_SIZE = 0.1
            BUTTON_SIZE = 0.1
            ASPECT_RATIO = win.size[0] / win.size[1]

            OPTIONS = {
                "mac": ["Yes", "No"],
                "windows": ["No", "Yes"]
            }
            target_name = "Yes"

            mouse = event.Mouse(win=win)
            BUTTONS = []
            BUTTON_TEXTS = []

            def __init__(self, style):
                super().__init__()
                self.style = style
                self.draw_interface()

            def update(self):
                for element, element_text in zip(self.BUTTONS, self.BUTTON_TEXTS):
                    if element.contains(self.mouse.getPos()):
                        if element_text.text == self.target_name:
                            element.fillColor = [0.7569, 0.8667, 0.9529]
                        else:
                            element.fillColor = [0.6, 0.6, 0.6]
                    else:
                        element.fillColor = [0.9843, 0.9843, 0.9843]
                    if self.mouse.isPressedIn(element) and element_text.text == self.target_name:
                        return False
                return True

            def reset(self):
                style = self.style.current_style
                for button_text, override in zip(self.BUTTON_TEXTS, self.OPTIONS[style]):
                    button_text.text = override

            def draw_interface(self):
                style = self.style.current_style
                bg_window = visual.Rect(
                    win=win,
                    name="base_popup",
                    units='norm',
                    fillColor=[0.7804, 0.7804, 0.7804], opacity=0.96, anchor='center',
                    pos=(0, 0), size=(2 * self.WINDOW_SIZE, self.WINDOW_SIZE),
                    interpolate=True)
                bg_window.setAutoDraw(True)
                self.COMPONENTS.append(bg_window)
                bg_toolbar = visual.Rect(
                    win=win,
                    name="base_popup_toolbar",
                    units='norm',
                    fillColor="lightgray", opacity=1.0, anchor='top-center',
                    pos=(0, self.WINDOW_SIZE / 2), size=(2 * self.WINDOW_SIZE, self.TOOLBAR_SIZE),
                    interpolate=True)
                bg_toolbar.setAutoDraw(True)
                self.COMPONENTS.append(bg_toolbar)
                icon_size = self.WINDOW_SIZE - self.TOOLBAR_SIZE * 2 - self.BUTTON_SIZE
                icon = visual.ImageStim(
                    win=win,
                    name="base_popup_icon",
                    units="norm",
                    image=self.ICON,
                    opacity=1.0,
                    size=(icon_size / self.ASPECT_RATIO, icon_size),
                    pos=(-1 * self.WINDOW_SIZE + self.TOOLBAR_SIZE / 2, self.TOOLBAR_SIZE / -2),
                    anchor="center-left"
                )
                icon.setAutoDraw(True)
                self.COMPONENTS.append(icon)

                content = visual.TextBox2(
                     win, text="Are you sure you want to permanently delete these files?", font='Open Sans',
                     pos=(-1 * self.WINDOW_SIZE + icon_size, self.TOOLBAR_SIZE / -2), units='norm', letterHeight=self.FONT_SIZE / 2,
                     size=(2 * self.WINDOW_SIZE - icon_size - self.TOOLBAR_SIZE, icon_size), borderWidth=2.0,
                     color='black', colorSpace='rgb',
                     opacity=None, bold=False, italic=False,
                     lineSpacing=1.0, speechPoint=None,
                     padding=0.0, alignment='top-left',
                     anchor='bottom-left', overflow='visible',
                     fillColor=None, borderColor=None,
                     flipHoriz=False, flipVert=False, languageStyle='LTR',
                     editable=False,
                     name='base_popup_content',
                     autoLog=False
                )
                content.setAutoDraw(True)
                self.COMPONENTS.append(content)

                for index, button_name in enumerate(self.OPTIONS[style]):
                    button = visual.Rect(
                        win=win,
                        name=f"base_popup_button_{index}",
                        units='norm',
                        lineColor=[-1.0000, -0.0588, 0.6863], lineWidth=1.0,
                        fillColor=[0.9843, 0.9843, 0.9843], opacity=1.0, anchor='bottom-right',
                        pos=(self.WINDOW_SIZE - self.BUTTON_SIZE * (index + 1) / 2 - self.BUTTON_SIZE * index * 2, self.WINDOW_SIZE / -2 + self.TOOLBAR_SIZE / 2),
                        size=(self.BUTTON_SIZE * 2, self.BUTTON_SIZE),
                        interpolate=True)
                    # Highlight [0.7569, 0.8667, 0.9529]
                    button.setAutoDraw(True)
                    self.COMPONENTS.append(button)
                    self.BUTTONS.append(button)
                    button_content = visual.TextBox2(
                         win, text=button_name, font='Open Sans',
                         pos=(self.WINDOW_SIZE - self.BUTTON_SIZE * (index + 1) / 2 - self.BUTTON_SIZE * index * 2, self.WINDOW_SIZE / -2 + self.TOOLBAR_SIZE / 2),
                         size=(self.BUTTON_SIZE * 2, self.BUTTON_SIZE),
                         units='norm', letterHeight=self.FONT_SIZE / 2,
                         borderWidth=2.0,
                         color='black', colorSpace='rgb',
                         opacity=None, bold=False, italic=False,
                         lineSpacing=1.0, speechPoint=None,
                         padding=0.0, alignment='center',
                         anchor='bottom-right', overflow='visible',
                         fillColor=None, borderColor=None,
                         flipHoriz=False, flipVert=False, languageStyle='LTR',
                         editable=False,
                         name=f"base_popup_button_text_{index}",
                         autoLog=False
                    )
                    button_content.setAutoDraw(True)
                    self.COMPONENTS.append(button_content)
                    self.BUTTON_TEXTS.append(button_content)

        class SplitViewEditor(Component):
            FONT_SIZE = 0.1
            BAR_SIZE = 0.1
            TOOLBAR_SIZE = 0.1
            PADDING_SIZE = 0.05

            ASPECT_RATIO = win.size[0] / win.size[1]

            TARGET = ""

            def __init__(self):
                super().__init__()
                self.draw_interface()
                self.allocate_target()

            def allocate_target(self):
                self.TARGET = fake.sentence(nb_words=int(personalized_settings["typing_speed"] / 4.7 * 45)+1)   #"TODO: Add template"
                self.reset()

            def allocate_test_target(self):
                self.TARGET = fake.sentence(nb_words=40)
                self.reset()

            def log(self):
                thisExp.addData("notes_repeat_source", self.notes_repeat_source.text)
                thisExp.addData("notes_repeat_target", self.notes_repeat_target.text)

            def safe_match(self, input_string):
                return len(re.sub(r'[^A-Za-z,. \n]', '', input_string))

            def update(self):
                matched = self.safe_match(self.notes_repeat_source.text) <= self.safe_match(self.notes_repeat_target.text)
                if matched:
                    self.notes_repeat_target.hasFocus = False
                    self.notes_repeat_target.editable = False
                    return False
                self.notes_repeat_target.hasFocus = True
                self.notes_repeat_target.editable = True
                return True

            def reset(self):
                self.notes_repeat_target.clear()
                self.notes_repeat_source.reset()
                self.notes_repeat_target.reset()
                self.notes_repeat_source.text = self.TARGET

            def draw_interface(self):
                self.notes_repeat_source = visual.TextBox2(
                     win, text='This is the template.\nMultiline.', placeholder='Type here...', font='Open Sans',
                     pos=(-1 * self.PADDING_SIZE / 2, (1.0 - self.FONT_SIZE - self.TOOLBAR_SIZE - self.PADDING_SIZE) / 2),
                     size=((1.0 - 2 * self.PADDING_SIZE) / 2 * self.ASPECT_RATIO, (2.0 - self.FONT_SIZE - self.TOOLBAR_SIZE - self.BAR_SIZE - 2 * self.PADDING_SIZE) / 2),
                     borderWidth=2.0,
                     units='height',
                     letterHeight=self.FONT_SIZE / 2 / 2,
                     color='black', colorSpace='rgb',
                     opacity=None,
                     bold=False, italic=False,
                     lineSpacing=1.0, speechPoint=None,
                     padding=0.05, alignment='top-left',
                     anchor='top-right', overflow='visible',
                     fillColor='white', borderColor='black',
                     flipHoriz=False, flipVert=False, languageStyle='LTR',
                     editable=False,
                     name='notes_repeat_source',
                     autoLog=False,
                     autoDraw=True
                )
                self.COMPONENTS.append(self.notes_repeat_source)
                self.notes_repeat_target = visual.TextBox2(
                     win, text=None, placeholder='Type here...', font='Open Sans',
                     pos=(self.PADDING_SIZE / 2, (1.0 - self.FONT_SIZE - self.TOOLBAR_SIZE - self.PADDING_SIZE) / 2),
                     size=((1.0 - 2 * self.PADDING_SIZE) / 2 * self.ASPECT_RATIO, (2.0 - self.FONT_SIZE - self.TOOLBAR_SIZE - self.BAR_SIZE - 2 * self.PADDING_SIZE) / 2),
                     units='height',
                     letterHeight=self.FONT_SIZE / 2 / 2,
                     borderWidth=2.0,
                     color='black', colorSpace='rgb',
                     opacity=None,
                     bold=False, italic=False,
                     lineSpacing=1.0, speechPoint=None,
                     padding=0.05, alignment='top-left',
                     anchor='top-left', overflow='visible',
                     fillColor='white', borderColor='black',
                     flipHoriz=False, flipVert=False, languageStyle='LTR',
                     editable=False,
                     name='notes_repeat_target',
                     autoLog=False,
                     autoDraw=True
                )
                self.COMPONENTS.append(self.notes_repeat_target)


        class SingleViewEditor(SplitViewEditor):
            def log(self):
                thisExp.addData("single_note_repeat_source", self.notes_repeat_source.text)
                thisExp.addData("single_note_repeat_target", self.notes_repeat_target.text)

            def draw_interface(self):
                self.notes_repeat_source = visual.TextBox2(
                     win, text='This is the template.\nMultiline.', placeholder='Type here...', font='Open Sans',
                     pos=(0, (1.0 - self.FONT_SIZE - self.TOOLBAR_SIZE - self.PADDING_SIZE) / 2),
                     size=((1.0 - 2 * self.PADDING_SIZE) * self.ASPECT_RATIO, (2.0 - self.FONT_SIZE - self.TOOLBAR_SIZE - self.BAR_SIZE - 2 * self.PADDING_SIZE) / 2),
                     borderWidth=2.0,
                     units='height',
                     letterHeight=self.FONT_SIZE / 2 / 2,
                     color='gray', colorSpace='rgb',
                     opacity=None,
                     bold=False, italic=False,
                     lineSpacing=1.0, speechPoint=None,
                     padding=0.05, alignment='top-left',
                     anchor='top-center', overflow='visible',
                     fillColor='white', borderColor='black',
                     flipHoriz=False, flipVert=False, languageStyle='LTR',
                     editable=False,
                     name='single_note_repeat_source',
                     autoLog=False,
                     autoDraw=True
                )
                self.COMPONENTS.append(self.notes_repeat_source)
                self.notes_repeat_target = visual.TextBox2(
                     win, text=None, placeholder='', font='Open Sans',
                     pos=(0, (1.0 - self.FONT_SIZE - self.TOOLBAR_SIZE - self.PADDING_SIZE) / 2),
                     size=((1.0 - 2 * self.PADDING_SIZE) * self.ASPECT_RATIO, (2.0 - self.FONT_SIZE - self.TOOLBAR_SIZE - self.BAR_SIZE - 2 * self.PADDING_SIZE) / 2),
                     units='height',
                     letterHeight=self.FONT_SIZE / 2 / 2,
                     borderWidth=2.0,
                     color='black', colorSpace='rgb',
                     opacity=0.1,
                     bold=False, italic=False,
                     lineSpacing=1.0, speechPoint=None,
                     padding=0.05, alignment='top-left',
                     anchor='top-center', overflow='visible',
                     fillColor='white', borderColor='black',
                     flipHoriz=False, flipVert=False, languageStyle='LTR',
                     editable=False,
                     name='single_note_repeat_target',
                     autoLog=False,
                     autoDraw=True
                )
                self.COMPONENTS.append(self.notes_repeat_target)


        class Notification(Component):
            FONT_SIZE = 0.1
            BAR_SIZE = 0.1
            WIDTH = 0.4
            HEIGHT = 0.2

            ASPECT_RATIO = win.size[0] / win.size[1]

            LOCATIONS = {
                "windows": {
                    "anchor": "bottom-right",
                    "image": "resources/windows/notification.png",
                    "size": (WIDTH, HEIGHT),
                    "pos": (0.5 * ASPECT_RATIO, -0.5 + BAR_SIZE / 2)
                },
                "mac": {
                    "anchor": "top-right",
                    "image": "resources/mac/notification.png",
                    "size": (WIDTH, HEIGHT),
                    "pos": (0.5 * ASPECT_RATIO, 0.5 - FONT_SIZE / 2)
                }
            }

            mouse = event.Mouse(win=win)

            def __init__(self, style):
                super().__init__()
                self.style = style
                self.draw_interface()

            def update(self):
                if self.mouse.isPressedIn(self.background):
                    return False
                return True

            def reset(self):
                style = self.style.current_style
                for key, value in self.LOCATIONS[style].items():
                    setattr(self.background, key, value)

            def draw_interface(self):
                style = self.style.current_style
                self.background = visual.ImageStim(
                    win=win,
                    name="notification_background",
                    units='height',
                    interpolate=True,
                    **self.LOCATIONS[style])
                self.background.setAutoDraw(True)
                self.COMPONENTS.append(self.background)



        class CameraView(Component):
            BAR_SIZE = 0.1

            def __init__(self):
                super().__init__()
                self.draw_interface()

            def draw_interface(self):
                self.view = visual.ImageStim(
                    win=win,
                    name='live_camera_view',
                    image=camera_connector, mask=None, anchor='top-left',
                    ori=0.0, pos=(-1, 1), draggable=False, size=(self.BAR_SIZE, self.BAR_SIZE),
                    color=[1,1,1], colorSpace='rgb', opacity=None,
                    flipHoriz=True, flipVert=False,
                    texRes=128.0, interpolate=True, depth=-1.0)
                self.view.setAutoDraw(True)
                self.COMPONENTS.append(self.view)


        def hide_all():
            task_bar.hide()
            base_window.hide()
            browser_searchbar.hide()
            form_overlay.hide()
            trash_items_overlay.hide()
            popup_window.hide()
            split_view_editor.hide()
            single_view_editor.hide()
            notification.hide()

        def reset_layout():
            stylizer.reset()
            task_bar.reset()
            base_window.reset()
            popup_window.reset()
            split_view_editor.reset()
            single_view_editor.reset()
            notification.reset()

        class EventTimer():
            showed_alertness_prompt = 0
            interval_alertness_prompt = 5 * 60  # seconds
            showed_pause_prompt = 0
            interval_pause_prompt = 10 * 60
            pause_enabled = False
            duration_experiment = 2 * 60 * 60 + 5 * 60   # seconds
            keywords = ["MAIL", "FILE_DRAGGING", "FILE_OPENING", "TRASH_BIN", "NOTES"]

            def __init__(self):
                self.clock = core.Clock()

            def should_pause(self):
                if self.pause_enabled:
                    return 1
                return 0

            def apply_pause(self, offset):
                self.clock.addTime(-1 * offset)

            def should_end(self):
                if self.clock.getTime() > self.duration_experiment:
                    return True
                return False

            def should_show(self, target):
                if target not in self.keywords:
                    if target == "PAUSE":
                        expected_pause_counts = int(self.clock.getTime() / self.interval_pause_prompt)
                        if self.showed_pause_prompt < expected_pause_counts:
                            self.showed_pause_prompt += 1
                            return 1
                        return 0
                    else:
                        expected_prompt_counts = int(self.clock.getTime() / self.interval_alertness_prompt)
                        if self.showed_alertness_prompt < expected_prompt_counts:
                            self.showed_alertness_prompt += 1
                            return 1
                        return 0
                if tasks.thisN == self.keywords.index(target):
                    return 1
                return 0

        stylizer = Stylizer()
        task_bar = TaskBar(style=stylizer)
        base_window = BaseWindow(style=stylizer)
        browser_searchbar = BrowserSearchbar()
        form_overlay = FormOverlay(random=True)
        trash_items_overlay = TrashItemsOverlay(N=8)
        popup_window = PopupWindow(style=stylizer)
        split_view_editor = SplitViewEditor()
        single_view_editor = SingleViewEditor()
        notification = Notification(style=stylizer)
        camera_view = CameraView()

        hide_all()
      Begin Routine:
        serial_connector.write(SerialConnector.EEG_START_RECORDING)
      End Experiment:
        serial_connector.close()
        camera_connector.close()
    TextComponent global_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Loading...
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
  Routine file_manager_homescreen
    RoutineSettingsComponent file_manager_homescreen
      color = white
      useWindowParams = True
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    CodeComponent file_manager_code_homescreen
      Code Type = Py
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      Begin Routine:
        task_bar.allocate_target(index=0)
        task_bar.show()

        serial_connector.write(SerialConnector.FILE_MANAGER_HOMESCREEN_BEGIN)
      Each Frame:
        continueRoutine = task_bar.update()
      End Routine:
        #serial_connector.write(SerialConnector.FILE_MANAGER_HOMESCREEN_END)
    MouseComponent file_manager_mouse_homescreen
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      saveParamsClickable = file_manager_mouse_movement_homescreen,
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
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    TextboxComponent file_manager_textbox_homescreen
      autoLog = False
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (0, 1.0 - FONT_SIZE / 2)
      saveStartStop = False
      size [set every repeat] = (2.0, FONT_SIZE)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Open <i>{}</i> on the task bar".format(task_bar.target_name)
      units = norm
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  Routine browser_homescreen
    RoutineSettingsComponent browser_homescreen
      color = white
      useWindowParams = True
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    CodeComponent browser_code_homescreen
      Code Type = Py
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      Begin Routine:
        task_bar.allocate_target(index=1)
        task_bar.show()

        serial_connector.write(SerialConnector.BROWSER_HOMESCREEN_BEGIN)
      Each Frame:
        continueRoutine = task_bar.update()
      End Routine:
        #serial_connector.write(SerialConnector.BROWSER_HOMESCREEN_END)
    MouseComponent browser_mouse_homescreen
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      saveParamsClickable = browser_mouse_movement_homescreen,
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
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    TextboxComponent browser_textbox_homescreen
      autoLog = False
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (0, 1.0 - FONT_SIZE / 2)
      saveStartStop = False
      size [set every repeat] = (2.0, FONT_SIZE)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Open <i>{}</i> on the task bar".format(task_bar.target_name)
      units = norm
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  Routine browser_content
    RoutineSettingsComponent browser_content
      color = white
      useWindowParams = True
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    CodeComponent browser_content_code
      Code Type = Py
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      Begin Routine:
        form_overlay.reset()
        form_overlay.show()
        serial_connector.write(SerialConnector.BROWSER_CONTENT_BEGIN)
      Each Frame:
        base_window.update()
        task_bar.update()
        browser_searchbar.update()
        continueRoutine = form_overlay.update()
      End Routine:
        form_overlay.log()
        form_overlay.hide()
        #serial_connector.write(SerialConnector.BROWSER_CONTENT_END)
    TextboxComponent browser_textbox
      autoLog = False
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (0, 1.0 - FONT_SIZE / 2)
      saveStartStop = False
      size [set every repeat] = (2.0, FONT_SIZE)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Please complete the form".format()
      units = norm
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    MouseComponent browser_content_mouse
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      saveParamsClickable = browser_content_mouse_movement,
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
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  Routine window_close
    RoutineSettingsComponent window_close
      color = white
      useWindowParams = True
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    CodeComponent close_code
      Code Type = Py
      Begin Routine:
        base_window.allocate_target()
        base_window.show()
        task_bar.show()

        serial_connector.write(SerialConnector.WINDOW_CLOSE_BEGIN)
      Each Frame:
        task_bar.update()
        continueRoutine = base_window.update()
      End Routine:
        base_window.log()
        hide_all()

        #serial_connector.write(SerialConnector.WINDOW_CLOSE_END)
    TextboxComponent close_textbox
      autoLog = False
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (0, 1.0 - FONT_SIZE / 2)
      saveStartStop = False
      size [set every repeat] = (2.0, FONT_SIZE)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Click <i>{}</i> to Exit {}".format(base_window.target_name, task_bar.target_name)
      units = norm
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    MouseComponent window_close_mouse
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      saveParamsClickable = window_close_mouse_movement,
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
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    ImageComponent success_image
      image = resources/success.png
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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  Routine browser_navigation
    RoutineSettingsComponent browser_navigation
      color = white
      useWindowParams = True
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    CodeComponent browser_navigation_code
      Code Type = Py
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      Begin Routine:
        base_window.update_title(task_bar.target_name)
        browser_searchbar.allocate_target()
        base_window.show()
        browser_searchbar.show()
        task_bar.show()

        win.winHandle.activate()
        serial_connector.write(SerialConnector.BROWSER_NAVIGATION_BEGIN)
      Each Frame:
        base_window.update()
        task_bar.update()
        continueRoutine = browser_searchbar.update()
      End Routine:
        browser_searchbar.log()
        #serial_connector.write(SerialConnector.BROWSER_NAVIGATION_END)
    TextboxComponent browser_navigation_textbox
      autoLog = False
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (0, 1.0 - FONT_SIZE / 2)
      saveStartStop = False
      size [set every repeat] = (2.0, FONT_SIZE)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Please enter the url <i>{}</i>".format(browser_searchbar.target_name)
      units = norm
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    MouseComponent browser_navigation_mouse
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      saveParamsClickable = browser_navigation_mouse_movement,
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
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    KeyboardComponent browser_navigation_user_key_release
      discard previous = False
      forceEndRoutine = False
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = all keys
      syncScreenRefresh = False
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  Routine file_manager_dragging
    RoutineSettingsComponent file_manager_dragging
      color = white
      useWindowParams = True
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    CodeComponent file_manager_dragging_code
      Code Type = Py
      Begin Routine:
        base_window.update_title(task_bar.target_name)
        base_window.show()
        task_bar.show()

        # Define size and location of the stimuli
        size = 0.1
        radius = 0.2
        distance = 0.4
        angle = np.random.uniform(0, 2 * np.pi)
        loc_x, loc_y = np.random.uniform(-radius, radius), np.random.uniform(-radius, radius)
        target_x, target_y = loc_x + distance * np.cos(angle), loc_y + distance * np.sin(angle)
        # Log clicked elements
        last_clicked_offset = None

        serial_connector.write(SerialConnector.FILE_MANAGER_DRAGGING_BEGIN)
      Each Frame:
        task_bar.update()
        base_window.update()

        buttons = stimuli_dragging_mouse.getPressed()
        if last_clicked_offset is None and stimuli_dragging_mouse.isPressedIn(stimuli_dragging_stimuli_image):
            last_clicked_offset = stimuli_dragging_stimuli_image.pos - stimuli_dragging_mouse.getPos()
        elif last_clicked_offset is not None and np.sum(buttons) > 0:
            stimuli_dragging_stimuli_image.setPos(last_clicked_offset + stimuli_dragging_mouse.getPos())
        if np.sum(buttons) == 0 and last_clicked_offset is not None:
            if np.linalg.norm(stimuli_dragging_stimuli_image.pos - stimuli_dragging_target_image.pos) <= size:
                continueRoutine = False
            else:
                last_clicked_offset = None
                stimuli_dragging_stimuli_image.setPos((loc_x, loc_y))
      End Routine:
        thisExp.addData('size', size)
        thisExp.addData('radius', radius)
        thisExp.addData('angle', angle)
        thisExp.addData('distance', distance)
        thisExp.addData('stimuli_location', (loc_x, loc_y))
        thisExp.addData('target_location', (target_x, target_y))
        thisExp.addData('last_clicked_offset', tuple(last_clicked_offset))

        #serial_connector.write(SerialConnector.FILE_MANAGER_DRAGGING_END)
    TextboxComponent file_manager_dragging_textbox
      autoLog = False
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (0, 1.0 - FONT_SIZE / 2)
      saveStartStop = False
      size [set every repeat] = (2.0, FONT_SIZE)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Please drag the folder to the destination".format()
      units = norm
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    MouseComponent stimuli_dragging_mouse
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      saveParamsClickable = stimuli_dragging_mouse_movement,
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
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    ImageComponent stimuli_dragging_target_image
      image = resources/target_stimuli.png
      opacity = 0.8
      pos [set every repeat] = (target_x, target_y)
      size [set every repeat] = (size, size * BaseWindow.ASPECT_RATIO)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent stimuli_dragging_stimuli_image
      image = resources/drag_stimuli.png
      opacity = 0.9
      pos [set every repeat] = (loc_x, loc_y)
      size [set every repeat] = (size, size * BaseWindow.ASPECT_RATIO)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent stimuli_dragging_mouse_debug
      color = lightgrey
      disabled = True
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $"{:.2f}".format(np.linalg.norm(stimuli_dragging_mouse_movement.getPos() - np.array([target_x, target_y])))
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  Routine file_manager_opening
    RoutineSettingsComponent file_manager_opening
      color = white
      useWindowParams = True
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    CodeComponent file_manager_opening_code
      Code Type = Py
      Begin Routine:
        base_window.update_title(task_bar.target_name)
        base_window.show()
        task_bar.show()

        # Define size and location of the stimuli
        size = 0.1
        radius = 0.4
        loc_x, loc_y = np.random.uniform(-radius, radius), np.random.uniform(-radius, radius)

        # Log clicked elements
        clicked_elements = 0
        last_clicked = False

        serial_connector.write(SerialConnector.FILE_MANAGER_OPENING_BEGIN)
      Each Frame:
        task_bar.update()
        base_window.update()

        if not last_clicked and stimuli_reaction_mouse_movement.isPressedIn(stimuli_reaction_stimuli_image):
            clicked_elements += 1
            last_clicked = True
        if not stimuli_reaction_mouse_movement.isPressedIn(stimuli_reaction_stimuli_image):
            last_clicked = False
        if clicked_elements >= 2:
            continueRoutine = False
      End Routine:
        thisExp.addData('stimuli_reaction_size', size)
        thisExp.addData('stimuli_reaction_radius', radius)
        thisExp.addData('stimuli_reaction_stimuli_location', (loc_x, loc_y))
        #serial_connector.write(SerialConnector.FILE_MANAGER_OPENING_END)
    TextboxComponent file_manager_opening_textbox
      autoLog = False
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (0, 1.0 - FONT_SIZE / 2)
      saveStartStop = False
      size [set every repeat] = (2.0, FONT_SIZE)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Please double-click to open the folders".format()
      units = norm
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    MouseComponent stimuli_reaction_mouse_movement
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      saveParamsClickable = stimuli_reaction_mouse_action,
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
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    ImageComponent stimuli_reaction_stimuli_image
      image = resources/folder_stimuli.png
      pos [set every repeat] = (loc_x, loc_y)
      size [set every repeat] = (size, size * BaseWindow.ASPECT_RATIO)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent stimuli_reaction_mouse_debug
      color = lightgrey
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every frame] = $"{:.2f}".format(np.linalg.norm(stimuli_reaction_mouse_movement.getPos() - np.array([loc_x, loc_y])))
      units = norm
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  Routine trash_bin_homescreen
    RoutineSettingsComponent trash_bin_homescreen
      color = white
      useWindowParams = True
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    CodeComponent trash_bin_code_homescreen
      Code Type = Py
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      Begin Routine:
        task_bar.allocate_target(index=4)
        task_bar.show()

        serial_connector.write(SerialConnector.TRASH_BIN_HOMESCREEN_BEGIN)
      Each Frame:
        continueRoutine = task_bar.update()
      End Routine:
        #serial_connector.write(SerialConnector.TRASH_BIN_HOMESCREEN_END)
    MouseComponent trash_bin_mouse_homescreen
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      saveParamsClickable = trash_bin_mouse_movement_homescreen,
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
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    TextboxComponent trash_bin_textbox_homescreen
      autoLog = False
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (0, 1.0 - FONT_SIZE / 2)
      saveStartStop = False
      size [set every repeat] = (2.0, FONT_SIZE)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Open <i>{}</i> on the task bar".format(task_bar.target_name)
      units = norm
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  Routine trash_bin_select
    RoutineSettingsComponent trash_bin_select
      color = white
      useWindowParams = True
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    CodeComponent trash_bin_select_code
      Code Type = Py
      Begin Routine:
        base_window.update_title(task_bar.target_name)
        base_window.show()
        task_bar.show()
        trash_items_overlay.reset()
        trash_items_overlay.show()
        serial_connector.write(SerialConnector.TRASH_BIN_SELECT_BEGIN)
      Each Frame:
        base_window.update()
        task_bar.update()
        continueRoutine = trash_items_overlay.update()
      End Routine:
        trash_items_overlay.log()
        #serial_connector.write(SerialConnector.TRASH_BIN_SELECT_END)
    MouseComponent trash_bin_select_mouse
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      saveParamsClickable = trash_bin_select_mouse_movement,
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
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    TextboxComponent trash_bin_select_textbox
      autoLog = False
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (0, 1.0 - FONT_SIZE / 2)
      saveStartStop = False
      size [set every repeat] = (2.0, FONT_SIZE)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Select all items at once".format()
      units = norm
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  Routine trash_bin_confirm
    RoutineSettingsComponent trash_bin_confirm
      color = white
      useWindowParams = True
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    CodeComponent trash_bin_confirm_code
      Code Type = Py
      Begin Routine:
        popup_window.show()
        serial_connector.write(SerialConnector.TRASH_BIN_CONFIRM_BEGIN)
      Each Frame:
        base_window.update()
        task_bar.update()
        continueRoutine = popup_window.update()
      End Routine:
        trash_items_overlay.hide()
        popup_window.hide()
        task_bar.set_trash_empty()
        #serial_connector.write(SerialConnector.TRASH_BIN_CONFIRM_END)
    MouseComponent trash_bin_confirm_mouse
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      saveParamsClickable = trash_bin_confirm_mouse_movement,
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
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    TextboxComponent trash_bin_confirm_textbox
      autoLog = False
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (0, 1.0 - FONT_SIZE / 2)
      saveStartStop = False
      size [set every repeat] = (2.0, FONT_SIZE)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Confirm your action".format()
      units = norm
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  Routine style_randomizer
    RoutineSettingsComponent style_randomizer
      color = white
      useWindowParams = True
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    CodeComponent style_randomizer_code
      Code Type = Py
      Begin Routine:
        reset_layout()
        camera_connector.record()
      End Routine:
        stylizer.log()
        camera_view.show()
        if event_timer.should_end():
            trials.finished = True
  Routine notes_homescreen
    RoutineSettingsComponent notes_homescreen
      color = white
      useWindowParams = True
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    CodeComponent notes_code_homescreen
      Code Type = Py
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      Begin Routine:
        task_bar.allocate_target(index=3)
        task_bar.show()

        serial_connector.write(SerialConnector.NOTES_HOMESCREEN_BEGIN)
      Each Frame:
        continueRoutine = task_bar.update()
      End Routine:
        #serial_connector.write(SerialConnector.NOTES_HOMESCREEN_END)
    MouseComponent notes_mouse_homescreen
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      saveParamsClickable = notes_mouse_movement_homescreen,
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
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    TextboxComponent notes_textbox_homescreen
      autoLog = False
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (0, 1.0 - FONT_SIZE / 2)
      saveStartStop = False
      size [set every repeat] = (2.0, FONT_SIZE)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Open <i>{}</i> on the task bar".format(task_bar.target_name)
      units = norm
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  Routine notes_repeat
    RoutineSettingsComponent notes_repeat
      color = white
      useWindowParams = True
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    CodeComponent notes_repeat_code
      Code Type = Py
      Begin Routine:
        base_window.update_title(task_bar.target_name)
        split_view_editor.allocate_target()
        base_window.show()
        task_bar.show()
        split_view_editor.show()
        serial_connector.write(SerialConnector.NOTES_REPEAT_BEGIN)
      Each Frame:
        task_bar.update()
        base_window.update()
        continueRoutine = split_view_editor.update()
      End Routine:
        split_view_editor.log()
        #print(split_view_editor.notes_repeat_source.text, split_view_editor.notes_repeat_target.text)
        split_view_editor.hide()
        #serial_connector.write(SerialConnector.NOTES_REPEAT_END)
    TextboxComponent notes_repeat_textbox
      autoLog = False
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (0, 1.0 - FONT_SIZE / 2)
      saveStartStop = False
      size [set every repeat] = (2.0, FONT_SIZE)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Please repeat the content on the right as it is shown on the left pane".format()
      units = norm
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    KeyboardComponent notes_repeat_keyboard
      discard previous = False
      forceEndRoutine = False
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = all keys
      syncScreenRefresh = False
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  Routine mail_homescreen
    RoutineSettingsComponent mail_homescreen
      color = white
      useWindowParams = True
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    CodeComponent mail_code_homescreen
      Code Type = Py
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      Begin Routine:
        task_bar.allocate_target(index=2)
        task_bar.show()
        serial_connector.write(SerialConnector.MAIL_HOMESCREEN_BEGIN)
      Each Frame:
        continueRoutine = task_bar.update()
      End Routine:
        #serial_connector.write(SerialConnector.MAIL_HOMESCREEN_END)
    MouseComponent mail_mouse_homescreen
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      saveParamsClickable = mail_mouse_movement_homescreen,
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      syncScreenRefresh = True
      timeRelativeTo = routine
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    TextboxComponent mail_textbox_homescreen
      autoLog = False
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (0, 1.0 - FONT_SIZE / 2)
      saveStartStop = False
      size [set every repeat] = (2.0, FONT_SIZE)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $"Wait for <i>{} Notification</i>".format(task_bar.target_name)
      units = norm
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  Routine mail_notification
    RoutineSettingsComponent mail_notification
      color = white
      useWindowParams = True
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    CodeComponent mail_notification_code
      Code Type = Py
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      Begin Routine:
        notification.show()
        serial_connector.write(SerialConnector.MAIL_NOTIFICATION_BEGIN)
      Each Frame:
        task_bar.update()
        continueRoutine = notification.update()
      End Routine:
        notification.hide()
        #serial_connector.write(SerialConnector.MAIL_NOTIFICATION_END)
    MouseComponent mail_notification_mouse
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      saveParamsClickable = mail_notification_mouse_movement,
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
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    TextboxComponent mail_notification_textbox
      autoLog = False
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (0, 1.0 - FONT_SIZE / 2)
      saveStartStop = False
      size [set every repeat] = (2.0, FONT_SIZE)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Click on the <i>{} Notification Popup</i>".format(task_bar.target_name)
      units = norm
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  Routine mail_content
    RoutineSettingsComponent mail_content
      color = white
      useWindowParams = True
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    CodeComponent mail_content_code
      Code Type = Py
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      Begin Routine:
        base_window.update_title(task_bar.target_name)
        single_view_editor.allocate_target()
        base_window.show()
        single_view_editor.show()
        task_bar.show()

        win.winHandle.activate()

        serial_connector.write(SerialConnector.MAIL_CONTENT_BEGIN)
      Each Frame:
        base_window.update()
        task_bar.update()
        continueRoutine = single_view_editor.update()
      End Routine:
        single_view_editor.log()
        single_view_editor.hide()
        #serial_connector.write(SerialConnector.MAIL_CONTENT_END)
    TextboxComponent mail_content_textbox
      autoLog = False
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (0, 1.0 - FONT_SIZE / 2)
      saveStartStop = False
      size [set every repeat] = (2.0, FONT_SIZE)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Please complete the <i>{}</i>".format(task_bar.target_name)
      units = norm
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    KeyboardComponent mail_content_user_key_release
      discard previous = False
      forceEndRoutine = False
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = all keys
      syncScreenRefresh = False
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  Routine experiment_end
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    CodeComponent experiment_end_code
      Code Type = Py
      Begin Routine:
        serial_connector.write(SerialConnector.EXP_END)
      End Routine:
        serial_connector.write(SerialConnector.EEG_STOP_RECORDING)
    TextComponent experiment_end_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        End of Experiment


        Thank you very much for your participation!

        press any key to exit...
    MouseComponent experiment_end_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
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    KeyboardComponent experiment_end_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine experiment_start
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    CodeComponent experiment_start_code
      Code Type = Py
      Begin Routine:
        serial_connector.write(SerialConnector.EXP_BEGIN)
      End Routine:
        event_timer = EventTimer()
    TextComponent experiment_start_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Start of Experiment


        Welcome to this exciting journey, please try to finish all the tasks as fast as you can!

        press any key to start...
    MouseComponent experiment_start_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    KeyboardComponent experiment_start_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine calibration_start
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    CodeComponent calibration_start_code
      Code Type = Py
      Begin Routine:
        serial_connector.write(SerialConnector.CALIB_BEGIN)
        camera_connector.record()
      End Routine:
        camera_view.show()
    TextComponent calibration_start_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Calibration Stage


        We will run through a few tests to ensure you the best experience.

        press any key to continue...
    MouseComponent calibration_start_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    KeyboardComponent calibration_start_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine calibration_end
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    CodeComponent calibration_end_code
      Code Type = Py
      Begin Routine:
        print(personalized_settings)
        camera_view.hide()

        serial_connector.write(SerialConnector.CALIB_END)
      End Routine:
        for key_name, key_value in personalized_settings.items():
            thisExp.addData(key_name, key_value)

        camera_connector.save()
    TextComponent calibration_end_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        End of Calibration


        Your personalized settings have been applied.

        press any key to continue...
    MouseComponent calibration_end_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    KeyboardComponent calibration_end_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    TextComponent calibration_end_debug_text
      color = gray
      letterHeight = 0.05
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Typing Speed (char/sec): " + "{:.2f}".format(personalized_settings["typing_speed"])
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  Routine calibration_typing
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    CodeComponent calibration_typing_code
      Code Type = Py
      Begin Routine:
        stylizer.reset(style='windows')
        base_window.reset()
        base_window.update_title("Typing Speed Test")
        single_view_editor.allocate_test_target()
        task_bar.reset()
        task_bar.show()
        base_window.show()
        single_view_editor.show()

        win.winHandle.activate()

        calibration_typing_clock = core.MonotonicClock()
      Each Frame:
        base_window.update()
        task_bar.update()
        continueRoutine = single_view_editor.update()
      End Routine:
        single_view_editor.log()
        personalized_settings["typing_speed"] = len(single_view_editor.TARGET) / calibration_typing_clock.getTime()
        hide_all()
    KeyboardComponent calibration_typing_key
      discard previous = False
      forceEndRoutine = False
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = all keys
      syncScreenRefresh = False
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    TextboxComponent calibration_typing_prompt
      autoLog = False
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (0, 1.0 - FONT_SIZE / 2)
      saveStartStop = False
      size [set every repeat] = (2.0, FONT_SIZE)
      startVal [time (s)] = 0.0
      text = Please complete the content
      units = norm
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  Routine calibration_typing_start
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    TextComponent calibration_typing_start_text
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text:
        Typing Calibration


        You will be asked to enter sentences consisting of random words, with a period "." in the end. Your mouse will be disabled for this task. During typing, if you find any previous errors in typing that happened for more than two words before, you should ignore it and continue typing instead of trying to fix it.

        press ENTER to continue...
    KeyboardComponent calibration_typing_start_key
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine calibration_appearance_windows
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    CodeComponent calibration_appearance_windows_code
      Code Type = Py
      Begin Routine:
        stylizer.reset(style='windows')
        base_window.reset()
        base_window.allocate_target(index=0)
        base_window.update_title("Appearance (Windows Style)")
        task_bar.reset()
        task_bar.show()
        base_window.show()
      Each Frame:
        task_bar.update()
        continueRoutine = base_window.update()
      End Routine:
        base_window.log()
        stylizer.log()
        hide_all()
    TextComponent calibration_appearance_windows_text
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text:
        Introduction to System Appearance


        We will randomize system appearance throughout the experiment. With Windows style layout, title bar buttons are presented on the top-right corner of the window. On the task bar, we have applications named "File Manager", "Browser", "Mail", "Document" and "Trash", in the order of their appearance from left to right.

        click CLOSE button on the title bar to continue...
    TextboxComponent calibration_appearance_windows_prompt
      autoLog = False
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (0, 1.0 - FONT_SIZE / 2)
      saveStartStop = False
      size [set every repeat] = (2.0, FONT_SIZE)
      startVal [time (s)] = 0.0
      text = Guidance will be shown HERE
      units = norm
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  Routine calibration_appearance_mac
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    CodeComponent calibration_appearance_mac_code
      Code Type = Py
      Begin Routine:
        stylizer.reset(style='mac')
        base_window.reset()
        base_window.allocate_target(index=0)
        base_window.update_title("Appearance (macOS Style)")
        task_bar.reset()
        task_bar.show()
        base_window.show()
      Each Frame:
        task_bar.update()
        continueRoutine = base_window.update()
      End Routine:
        base_window.log()
        stylizer.log()
        hide_all()
    TextComponent calibration_appearance_mac_text
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text:
        Introduction to System Appearance


        With macOS style layout, title bar buttons are presented on the top-left corner of the window. On the task bar, we have applications named "File Manager", "Browser", "Mail", "Document" and "Trash", in the order of their appearance from left to right.

        click CLOSE button on the title bar to continue...
    TextboxComponent calibration_appearance_mac_prompt
      autoLog = False
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (0, 1.0 - FONT_SIZE / 2)
      saveStartStop = False
      size [set every repeat] = (2.0, FONT_SIZE)
      startVal [time (s)] = 0.0
      text = Guidance will be shown HERE
      units = norm
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
  Routine loop_end
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    CodeComponent loop_end_code
      Code Type = Py
      Begin Routine:
        camera_view.hide()
      End Routine:
        camera_connector.save()
  Routine pause_screen
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    TextComponent pause_screen_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Would you like to interrupt the experiment?


        If yes, press ESC to pause the experiment and call one of the organizers for assistance.

        Otherwise, click your mouse to continue...
    MouseComponent pause_screen_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
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    CodeComponent pause_screen_code
      Code Type = Py
      Each Frame:
        pressed_keys = event.getKeys()

        if 'escape' in pressed_keys:
            event_timer.pause_enabled = True
            continueRoutine = False
  Routine pause_on
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    TextComponent pause_on_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Experiment Paused


        Please call one of the organizers for assistance.

        WARNING: Only press ENTER to continue if instructed by the organizers.
    CodeComponent pause_on_code
      Code Type = Py
      Begin Routine:
        serial_connector.write(SerialConnector.EEG_STOP_RECORDING)
      Each Frame:
        pressed_keys = event.getKeys()

        if 'return' in pressed_keys:
            continueRoutine = False
      End Routine:
        event_timer.pause_enabled = False
        event_timer.apply_pause(routineTimer.getTime())
        print(f"Applied {routineTimer.getTime()}s offset after the pause.")
        serial_connector.write(SerialConnector.EEG_START_RECORDING)
Flow
  Routine definition
  Routine calibration_start
  Routine calibration_appearance_windows
  Routine calibration_appearance_mac
  Routine calibration_typing_start
  Routine calibration_typing
  Routine calibration_end
  Routine experiment_start
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 60
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    Routine style_randomizer
    LoopInitiator tasks loopType="TrialHandler"
      loopType = random
      nReps = 5
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      LoopInitiator mail loopType="TrialHandler"
        isTrials = False
        loopType = random
        nReps = event_timer.should_show('MAIL')
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        Routine mail_homescreen
        Routine mail_notification
        Routine mail_content
        Routine window_close
      LoopTerminator mail
      LoopInitiator file_manager_dragging_task loopType="TrialHandler"
        isTrials = False
        loopType = random
        nReps = event_timer.should_show('FILE_DRAGGING')
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        Routine file_manager_homescreen
        LoopInitiator file_dragging loopType="TrialHandler"
          loopType = sequential
          nReps = 20
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          Routine file_manager_dragging
        LoopTerminator file_dragging
        Routine window_close
      LoopTerminator file_manager_dragging_task
      LoopInitiator file_manager_opening_task loopType="TrialHandler"
        isTrials = False
        loopType = random
        nReps = event_timer.should_show('FILE_OPENING')
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        Routine file_manager_homescreen
        LoopInitiator file_opening loopType="TrialHandler"
          loopType = sequential
          nReps = 30
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          Routine file_manager_opening
        LoopTerminator file_opening
        Routine window_close
      LoopTerminator file_manager_opening_task
      LoopInitiator trash_bin loopType="TrialHandler"
        isTrials = False
        loopType = random
        nReps = event_timer.should_show('TRASH_BIN')
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        Routine trash_bin_homescreen
        Routine trash_bin_select
        Routine trash_bin_confirm
        Routine window_close
      LoopTerminator trash_bin
      LoopInitiator notes loopType="TrialHandler"
        isTrials = False
        loopType = random
        nReps = event_timer.should_show('NOTES')
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        Routine notes_homescreen
        Routine notes_repeat
        Routine window_close
      LoopTerminator notes
      LoopInitiator browser loopType="TrialHandler"
        isTrials = False
        loopType = random
        nReps = event_timer.should_show('BROWSER')
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        Routine browser_homescreen
        Routine browser_navigation
        Routine browser_content
        Routine window_close
      LoopTerminator browser
    LoopTerminator tasks
    Routine loop_end
    LoopInitiator pause loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = event_timer.should_show('PAUSE')
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      Routine pause_screen
      LoopInitiator should_pause loopType="TrialHandler"
        isTrials = False
        loopType = random
        nReps = event_timer.should_pause()
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        Routine pause_on
      LoopTerminator should_pause
    LoopTerminator pause
  LoopTerminator trials
  Routine experiment_end
